<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM8</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>opto-LGN-stim-Oct272023.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
double.Parse(it[0]) as integer
)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>parameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>parameters</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="integer" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>"&lt;" +it.ToString() +"&gt;"</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>COM8</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>